<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Foraging:UndergroundFeeder.bonsai">
        <PatchEvents>PatchEvents</PatchEvents>
        <SampleRate>SampleRate500Hz</SampleRate>
        <DeliverPellet>DeliverPellet</DeliverPellet>
        <PelletDelivered>PelletDelivered</PelletDelivered>
        <DueTime>PT0S</DueTime>
        <Count>0</Count>
        <ResetFeeder>ResetFeeder</ResetFeeder>
        <PortName>COM20</PortName>
        <Radius>4</Radius>
        <WheelDisplacement>WheelDisplacement</WheelDisplacement>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>WheelDisplacement</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>ShiftKey P Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="MulticastSubject">
        <Name>DeliverPellet</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>RButton ShiftKey Menu B P R Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="MulticastSubject">
        <Name>ResetFeeder</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PelletDelivered</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>