<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindBehaviorDirectedForagingDataSchema;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p2="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.VersionControl;assembly=AllenNeuralDynamics.VersionControl"
                 xmlns:p4="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:p5="clr-namespace:AllenNeuralDynamics.AindBehaviorServices.DataTypes;assembly=AllenNeuralDynamics.AindBehaviorServices"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p6="clr-namespace:AllenNeuralDynamics.DelphiController;assembly=AllenNeuralDynamics.DelphiController"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath>..\local\example_AindBehaviorDirectedForagingTaskLogic.json</TaskLogicPath>
        <RigPath>..\local\AindBehaviorDirectedForagingRig.json</RigPath>
        <SessionPath>..\local\Session.json</SessionPath>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:Session" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindBehaviorDirectedForagingRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindBehaviorDirectedForagingTaskLogic" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SessionSettings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RngSeed</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateContinuousUniform">
                <p2:Lower>0</p2:Lower>
                <p2:Upper>10</p2:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>CheckNull</scr:Name>
              <scr:Expression>Item1.HasValue ? Item1.Value : Item2</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RngSeedValue</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Seed" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed>7</num:Seed>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RngSeed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:CreateRepository">
                <p3:Path>../.</p3:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Repository</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SessionName" Selector="SessionName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>DataDirectory</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RootFolder" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai">
              <RootFolder>..\temp_data</RootFolder>
              <SessionName>test_2026-03-02T135305Z</SessionName>
              <SubjectName>LoggingRootPath</SubjectName>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="20" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialization</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p4:Unit">
              <rx:Name>StartExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p5:SoftwareEvent">
              <rx:Name>SoftwareEvent</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p4:Unit">
              <rx:Name>EndExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>TriggerHarpReadDump</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ExperimentState</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="14" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="14" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source3" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>HarpDevices</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                    <rx:Name>DelphiControllerCommands</rx:Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:Device">
                      <harp:OperationMode>Active</harp:OperationMode>
                      <harp:OperationLed>On</harp:OperationLed>
                      <harp:DumpRegisters>false</harp:DumpRegisters>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:Heartbeat>Enabled</harp:Heartbeat>
                      <harp:IgnoreErrors>false</harp:IgnoreErrors>
                      <harp:PortName>COM3</harp:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>DelphiControllerEvents</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="TriggerHarpReadDumpSubjectName" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TriggerHarpReadDump</Name>
                  </Expression>
                  <Expression xsi:type="harp:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="harp:CreateOperationControlPayload">
                      <harp:OperationMode>Active</harp:OperationMode>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:MuteReplies>false</harp:MuteReplies>
                      <harp:VisualIndicators>Off</harp:VisualIndicators>
                      <harp:OperationLed>Off</harp:OperationLed>
                      <harp:Heartbeat>Enabled</harp:Heartbeat>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiControllerCommands</Name>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="GroupWorkflow">
                    <Name>DisableCameraTriggers</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="p6:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p6:CreateEnableCamTriggerPayload">
                            <p6:EnableCamTrigger>0</p6:EnableCamTrigger>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>DelphiControllerCommands</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>DisableFSM</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="p6:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p6:CreateFSMStatePayload">
                            <p6:FSMState>0</p6:FSMState>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>DelphiControllerCommands</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>EnableValveLeds</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>HarpDelphiController.EnableValveLeds</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>Convert.ToByte(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="EnableValveLeds" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="p6:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p6:CreateEnableValveLedsPayload">
                            <p6:EnableValveLeds>1</p6:EnableValveLeds>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>DelphiControllerCommands</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="6" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>SetMinimumPokeTime</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>HarpDelphiController.MinimumPokeTime</Selector>
                        </Expression>
                        <Expression xsi:type="Multiply">
                          <Operand xsi:type="DoubleProperty">
                            <Value>1000000</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="MinimumPokeTimeUS" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="p6:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p6:CreateMinimumPokeTimeUSPayload">
                            <p6:MinimumPokeTimeUS>100000</p6:MinimumPokeTimeUS>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>DelphiControllerCommands</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="6" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>SetMinimumOdorDeliveryTime</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>HarpDelphiController.MinimumOdorDeliveryTime</Selector>
                        </Expression>
                        <Expression xsi:type="Multiply">
                          <Operand xsi:type="DoubleProperty">
                            <Value>1000000</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="MinOdorDeliveryTimeUS" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="p6:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p6:CreateMinOdorDeliveryTimeUSPayload">
                            <p6:MinOdorDeliveryTimeUS>500000</p6:MinOdorDeliveryTimeUS>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>DelphiControllerCommands</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="6" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>SetFinalValveEnergizedTime</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>HarpDelphiController.FinalValveEnergizedTime</Selector>
                        </Expression>
                        <Expression xsi:type="Multiply">
                          <Operand xsi:type="DoubleProperty">
                            <Value>1000000</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="FinalValveEnergizedTimeUS" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="p6:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p6:CreateFinalValveEnergizedTimeUSPayload">
                            <p6:FinalValveEnergizedTimeUS>110000</p6:FinalValveEnergizedTimeUS>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>DelphiControllerCommands</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="6" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>SetVacuumSetupTime</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>HarpDelphiController.VacuumSetupTime</Selector>
                        </Expression>
                        <Expression xsi:type="Multiply">
                          <Operand xsi:type="DoubleProperty">
                            <Value>1000000</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="VacuumSetupTimeUS" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="p6:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p6:CreateVacuumSetupTimeUSPayload">
                            <p6:VacuumSetupTimeUS>10000</p6:VacuumSetupTimeUS>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>DelphiControllerCommands</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="6" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>SetVacuumCloseTime</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>HarpDelphiController.VacuumCloseTime</Selector>
                        </Expression>
                        <Expression xsi:type="Multiply">
                          <Operand xsi:type="DoubleProperty">
                            <Value>1000000</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="VacuumCloseTimeUS" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="p6:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p6:CreateVacuumCloseTimeUSPayload">
                            <p6:VacuumCloseTimeUS>20000</p6:VacuumCloseTimeUS>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>DelphiControllerCommands</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="6" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>SetOdorTransitionTime</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>HarpDelphiController.OdorTransitionTime</Selector>
                        </Expression>
                        <Expression xsi:type="Multiply">
                          <Operand xsi:type="DoubleProperty">
                            <Value>1000000</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="OdorTransitionTimeUS" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="p6:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p6:CreateOdorTransitionTimeUSPayload">
                            <p6:OdorTransitionTimeUS>20000</p6:OdorTransitionTimeUS>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>DelphiControllerCommands</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="6" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>SetMaxOdorDeliveryTime</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>HarpDelphiController.MaxOdorDeliveryTime</Selector>
                        </Expression>
                        <Expression xsi:type="Multiply">
                          <Operand xsi:type="DoubleProperty">
                            <Value>1000000</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="MaxOdorDeliveryTimeUS" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="p6:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p6:CreateMaxOdorDeliveryTimeUSPayload">
                            <p6:MaxOdorDeliveryTimeUS>600000</p6:MaxOdorDeliveryTimeUS>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>DelphiControllerCommands</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="6" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p6:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p6:CreateQueuedOdorMaskPayload">
                      <p6:QueuedOdorMask>0</p6:QueuedOdorMask>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiControllerCommands</Name>
                  </Expression>
                  <Expression xsi:type="p6:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p6:CreateFSMStatePayload">
                      <p6:FSMState>1</p6:FSMState>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiControllerCommands</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DelphiControllerEvents</Name>
                  </Expression>
                  <Expression xsi:type="p6:Parse">
                    <harp:Register xsi:type="p6:QueuedOdorMask" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:UInt16">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>DelphiControllerQueueReady</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0.005S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp.TimeOfDay.TotalSeconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>Placeholder</Name>
              <Text><![CDATA[Debug harp timebase, will probably come from sniff detector]]></Text>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TimeBase</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="StartKey" Category="HotKeys" />
        <Property Name="StopKey" Category="HotKeys" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>OperationControl</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="StartKey" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="StopKey" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton RButton Cancel A B C Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>EndExperiment</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>TaskLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Trials</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>DoTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>TrialDefinition</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialDefinition</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DelphiControllerQueueReady</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1.OdorDefinition.OlfactometerMask</Selector>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="QueuedOdorMask" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p6:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p6:CreateQueuedOdorMaskPayload">
                      <p6:QueuedOdorMask>2</p6:QueuedOdorMask>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiControllerCommands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>OdorQueued</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>OdorQueued</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialTrigger</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="p6:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p6:CreateForceFSMPayload">
                      <p6:ForceFSM>1</p6:ForceFSM>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiControllerCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="13" To="15" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TriggerSource</Selector>
            </Expression>
            <Expression xsi:type="p1:MatchTriggerSource">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:RadiusThreshold" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>RadiusThresholdTrigger</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Annotation">
                    <Name>Placeholder</Name>
                    <Text><![CDATA[Placeholder for animal in-radius trigger]]></Text>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="wie:KeyDown">
                      <wie:Filter>T</wie:Filter>
                      <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p1:MatchTriggerSource">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:RandomisedTimer" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>RandomisedTimerTrigger</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Distribution</Selector>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>TimerDistribution</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TimerDistribution</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RngSeed</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="RandomSource" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:SampleDistribution">
                      <p1:RandomSource />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>WaitTimer</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>TimeSpan</Name>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TimeSpan</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT25.963S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="6" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Repeat" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p1:MatchTriggerSource">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:FixedTimer" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>FixedTimerTrigger</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Sequence</Selector>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Sequence</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>CurrentIndex</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TimeBase</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:First" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>StartTime</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TimeBase</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StartTime</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Subtract" />
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>ElapsedTime</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentIndex</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Sequence</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Count</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="LessThan" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>WaitForTime</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Index</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Sequence</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Index</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Index">
                          <Operand xsi:type="IntProperty">
                            <Value>5</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Time</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ElapsedTime</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Time</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="GreaterThanOrEqual" />
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Index</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="6" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="9" To="11" Label="Source1" />
                        <Edge From="10" To="11" Label="Source2" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="15" Label="Source1" />
                        <Edge From="14" To="15" Label="Source2" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CurrentIndex</Name>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="14" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>TrialTrigger</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="6" To="11" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="13" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="13" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source3" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>