<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.DelphiController;assembly=AllenNeuralDynamics.DelphiController"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:drw="clr-namespace:Bonsai.Vision.Drawing;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>DelphiControllerCommands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>false</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Enabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM3</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>DelphiControllerEvents</Name>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="harp:CreateOperationControlPayload">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:MuteReplies>false</harp:MuteReplies>
          <harp:VisualIndicators>Off</harp:VisualIndicators>
          <harp:OperationLed>Off</harp:OperationLed>
          <harp:Heartbeat>Enabled</harp:Heartbeat>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DelphiControllerCommands</Name>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="GroupWorkflow">
        <Name>DisableCameraTriggers</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateEnableCamTriggerPayload">
                <p1:EnableCamTrigger>0</p1:EnableCamTrigger>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DelphiControllerCommands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DisableFSM</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateFSMStatePayload">
                <p1:FSMState>0</p1:FSMState>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DelphiControllerCommands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>EnableValveLeds</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateEnableValveLedsPayload">
                <p1:EnableValveLeds>1</p1:EnableValveLeds>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DelphiControllerCommands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetMinimumPokeTime</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMinimumPokeTimeUSPayload">
                <p1:MinimumPokeTimeUS>100000</p1:MinimumPokeTimeUS>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DelphiControllerCommands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetMinimumOdorDeliveryTime</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMinOdorDeliveryTimeUSPayload">
                <p1:MinOdorDeliveryTimeUS>500000</p1:MinOdorDeliveryTimeUS>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DelphiControllerCommands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetFinalValveEnergizedTime</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateFinalValveEnergizedTimeUSPayload">
                <p1:FinalValveEnergizedTimeUS>110000</p1:FinalValveEnergizedTimeUS>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DelphiControllerCommands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetVacuumSetupTime</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateVacuumSetupTimeUSPayload">
                <p1:VacuumSetupTimeUS>10000</p1:VacuumSetupTimeUS>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DelphiControllerCommands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetVacuumCloseTime</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateVacuumCloseTimeUSPayload">
                <p1:VacuumCloseTimeUS>20000</p1:VacuumCloseTimeUS>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DelphiControllerCommands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetOdorTransitionTime</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateOdorTransitionTimeUSPayload">
                <p1:OdorTransitionTimeUS>20000</p1:OdorTransitionTimeUS>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DelphiControllerCommands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetMaxOdorDeliveryTime</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMaxOdorDeliveryTimeUSPayload">
                <p1:MaxOdorDeliveryTimeUS>600000</p1:MaxOdorDeliveryTimeUS>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DelphiControllerCommands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateQueuedOdorMaskPayload">
          <p1:QueuedOdorMask>0</p1:QueuedOdorMask>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DelphiControllerCommands</Name>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateFSMStatePayload">
          <p1:FSMState>1</p1:FSMState>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DelphiControllerCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DelphiControllerEvents</Name>
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:Register xsi:type="p1:QueuedOdorMask" />
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="WorkflowProperty" TypeArguments="sys:UInt16">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>DelphiControllerQueueReady</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateCamPinPayload">
          <p1:CamPin>26</p1:CamPin>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DelphiControllerCommands</Name>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateFrameRatePayload">
          <p1:FrameRate>50</p1:FrameRate>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DelphiControllerCommands</Name>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateDutyCyclePayload">
          <p1:DutyCycle>0.5</p1:DutyCycle>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DelphiControllerCommands</Name>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateEnableCamTriggerPayload">
          <p1:EnableCamTrigger>1</p1:EnableCamTrigger>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DelphiControllerCommands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:LimitedAindSpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>18575294</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
          <p2:ExposureTime>19000</p2:ExposureTime>
          <p2:Gain>0</p2:Gain>
          <p2:Binning>1</p2:Binning>
          <p2:Gamma xsi:nil="true" />
          <p2:PixelFormat>Mono8</p2:PixelFormat>
          <p2:RegionOfInterest>
            <p2:X>0</p2:X>
            <p2:Y>0</p2:Y>
            <p2:Width>0</p2:Width>
            <p2:Height>0</p2:Height>
          </p2:RegionOfInterest>
          <p2:AdcBitDepth xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Image</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Image</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:MaskPolygon">
          <cv:Regions>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>0</cv:X>
                <cv:Y>211</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>55</cv:X>
                <cv:Y>192</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>116</cv:X>
                <cv:Y>192</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>389</cv:X>
                <cv:Y>221</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>719</cv:X>
                <cv:Y>280</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>719</cv:X>
                <cv:Y>534</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>0</cv:X>
                <cv:Y>534</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
          </cv:Regions>
          <cv:MaskType>ToZero</cv:MaskType>
          <cv:FillValue>
            <cv:Val0>150</cv:Val0>
            <cv:Val1>150</cv:Val1>
            <cv:Val2>150</cv:Val2>
            <cv:Val3>150</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>64</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:MorphologicalOperator">
          <cv:Size>
            <cv:Width>4</cv:Width>
            <cv:Height>4</cv:Height>
          </cv:Size>
          <cv:Anchor>
            <cv:X>-1</cv:X>
            <cv:Y>-1</cv:Y>
          </cv:Anchor>
          <cv:Shape>Rectangle</cv:Shape>
          <cv:Iterations>1</cv:Iterations>
          <cv:Operation>Open</cv:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxSimple</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>10</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Contour</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CreatePoint2f">
          <cv:X>188</cv:X>
          <cv:Y>398</cv:Y>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>RoiCenter</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>60</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>RoiRadius</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Contour</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RoiCenter</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>EuclideanDistance</scr:Name>
        <scr:Expression>Math.Sqrt(Math.Pow(it.Item2.X - it.Item1.X, 2) + Math.Pow(it.Item2.Y - it.Item1.Y, 2))</scr:Expression>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RoiRadius</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="LessThan" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>InRoi</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0.05S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>CanvasDrawCall</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:CreateCanvas">
          <drw:Size>
            <drw:Width>720</drw:Width>
            <drw:Height>540</drw:Height>
          </drw:Size>
          <drw:Depth>U8</drw:Depth>
          <drw:Channels>3</drw:Channels>
          <drw:Color>
            <drw:Val0>0</drw:Val0>
            <drw:Val1>0</drw:Val1>
            <drw:Val2>0</drw:Val2>
            <drw:Val3>0</drw:Val3>
          </drw:Color>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Image</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Reshape">
          <dsp:Channels>3</dsp:Channels>
          <dsp:Rows>0</dsp:Rows>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Image" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:AddImage">
          <drw:Destination>
            <drw:X>0</drw:X>
            <drw:Y>0</drw:Y>
            <drw:Width>720</drw:Width>
            <drw:Height>540</drw:Height>
          </drw:Destination>
          <drw:Interpolation>Linear</drw:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RoiCenter</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Center" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RoiRadius</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Axes" Selector="it,it" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>InRoi</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>In</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CreatePoint3d">
          <cv:X>0</cv:X>
          <cv:Y>255</cv:Y>
          <cv:Z>0</cv:Z>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Out</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CreatePoint3d">
          <cv:X>255</cv:X>
          <cv:Y>0</cv:Y>
          <cv:Z>0</cv:Z>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Color" Selector="X,Y,Z,Z" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:Ellipse">
          <drw:Center>
            <drw:X>188</drw:X>
            <drw:Y>398</drw:Y>
          </drw:Center>
          <drw:Axes>
            <drw:Width>60</drw:Width>
            <drw:Height>60</drw:Height>
          </drw:Axes>
          <drw:Angle>0</drw:Angle>
          <drw:StartAngle>0</drw:StartAngle>
          <drw:EndAngle>360</drw:EndAngle>
          <drw:Color>
            <drw:Val0>0</drw:Val0>
            <drw:Val1>255</drw:Val1>
            <drw:Val2>0</drw:Val2>
            <drw:Val3>0</drw:Val3>
          </drw:Color>
          <drw:Thickness>1</drw:Thickness>
          <drw:LineType>Connected8</drw:LineType>
          <drw:Shift>0</drw:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:DrawCanvas" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="54" Label="Source1" />
      <Edge From="53" To="54" Label="Source2" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="57" Label="Source1" />
      <Edge From="56" To="57" Label="Source2" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="62" To="66" Label="Source1" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="64" To="65" Label="Source1" />
      <Edge From="65" To="66" Label="Source2" />
      <Edge From="66" To="78" Label="Source1" />
      <Edge From="67" To="68" Label="Source1" />
      <Edge From="68" To="78" Label="Source2" />
      <Edge From="69" To="70" Label="Source1" />
      <Edge From="70" To="78" Label="Source3" />
      <Edge From="71" To="72" Label="Source1" />
      <Edge From="71" To="74" Label="Source1" />
      <Edge From="72" To="73" Label="Source1" />
      <Edge From="73" To="76" Label="Source1" />
      <Edge From="74" To="75" Label="Source1" />
      <Edge From="75" To="76" Label="Source2" />
      <Edge From="76" To="77" Label="Source1" />
      <Edge From="77" To="78" Label="Source4" />
      <Edge From="78" To="79" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>